# --- Primera fuente ---

# -- Globals --
d:d             = 100.0 cm

# -- World --
S:Ge/World/Material         = "Vacuum"
d:Ge/World/HLX               = 1. m
d:Ge/World/HLY               = 1. m
d:Ge/World/HLZ               = 1. m
b:Ge/World/Invisible = "False"

# -- Target --
s:Ge/OuterBox/Type      = "TsBox"
s:Ge/OuterBox/Parent    = "World"
s:Ge/OuterBox/Material  = "G4_WATER"
d:Ge/OuterBox/HLX       = 0.5 * d m
d:Ge/OuterBox/HLY       = 0.5 * d m
d:Ge/OuterBox/HLZ       = 0.5 * d m
d:Ge/OuterBox/TransX   = 0.0 cm
d:Ge/OuterBox/TransY   = 0.0 cm
d:Ge/OuterBox/TransZ   = 0.0 cm

# Point beam, monoenergetic, monodirectional
# -- Beam --
s:So/Source/Type            = "Beam"
s:So/Source/Component       = "BeamPosition" # How to ubicate the beam
s:So/Source/BeamParticle    = "gamma"
d:So/Source/BeamEnergy      = 200 keV
u:So/Demo/BeamEnergySpread  = 0.0
s:So/Source/BeamPositionDistribution = "None"
s:So/Source/BeamAngularDistribution  = "None"
i:So/Source/NumberOfHistoriesInRun   = 1
d:Ge/BeamPosition/TransX                   = 0.0 cm
d:Ge/BeamPosition/TransY                   = 0.0 cm
d:Ge/BeamPosition/TransZ                   = -0.5 * Ge/OuterBox/HLZ cm
d:Ge/BeamPosition/RotX                     = 0.0 deg
d:Ge/BeamPosition/RotY                     = 0.0 deg
d:Ge/BeamPosition/RotZ                     = 0.0 deg


# --- Visualizacion ---
s:Ge/OuterBox/Color    = "pink"
#s:Ge/OuterBox/DrawingStyle = "Solid"
b:Ge/OuterBox/Invisible = "false"

# ---- Visualization ----
#b:Ts/UseQt         = "True"
s:Gr/ViewA/Type     = "OpenGL"

# ---- Interfaz ----
i:Ts/TrackingVerbosity = 0

# Activate axes
b:Gr/ViewA/IncludeAxes     = "True"
s:Gr/ViewA/AxesComponent   = "World"
d:Gr/ViewA/AxesSize        = 0.5 m

# Camera rotation
d:Gr/ViewA/Phi      = 45. deg
d:Gr/ViewA/Theta      = 33. deg

# Mantener ViewA abierta
b:Ts/PauseBeforeQuit = "True"